PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1200]
  expName = untitled
  keyboardBackend = Pyglet
  measureFrameRate = False
  runMode = 0
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Routines
  Routine Backward_Mask
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    ImageComponent image
      image = SnakePhotos/grayscale-white-noise.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (frames)] = 3
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  Routine Prime
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    ImageComponent prime
      image [set every repeat] = $imgPath
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (frames)] = 1.5
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  Routine Forward_Mask
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    ImageComponent image_2
      image = SnakePhotos/grayscale-white-noise.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (frames)] = 30
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  Routine Rest
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = +
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  Routine Report
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    TextComponent prompt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        As there a snake?
        Press y for yes and n for no
    KeyboardComponent key_resp
      allowedKeys = 'y','n'
      correctAns = $snake
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = imagePaths.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'imgPath': 'SnakePhotos/1.jpg'},
      {'imgPath': 'SnakePhotos/2.jpeg'},
      {'imgPath': 'SnakePhotos/3.jpg'},
      {'imgPath': 'SnakePhotos/4.jpg'},
      {'imgPath': 'SnakePhotos/5.jpeg'},
      {'imgPath': 'SnakePhotos/7.jpeg'},
      {'imgPath': 'SnakePhotos/8.jpg'},
      {'imgPath': 'SnakePhotos/10.jpg'},
      {'imgPath': 'SnakePhotos/11.jpg'},
      {'imgPath': 'SnakePhotos/12.jpg'},
      {'imgPath': 'SnakePhotos/15.jpg'},
      {'imgPath': 'SnakePhotos/17.jpg'},
      {'imgPath': 'SnakePhotos/18.jpg'},
      {'imgPath': 'SnakePhotos/19.jpg'},
      {'imgPath': 'SnakePhotos/20.jpg'}]
    Routine Rest
    Routine Backward_Mask
    Routine Prime
    Routine Forward_Mask
    Routine Report
  LoopTerminator trials
